opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: HS2
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_multi_gen2: {mount: left}
  p300_multi_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 2}
  Opentrons 96 Tip Rack 300 µL (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 3}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 1}
  96_WT: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, location: 4}
  96_WT (1): {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, location: 5}
  96_E135K: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, location: 6}
  96_E135K (1): {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, location: 7}
  E135K: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 10}
  substrate: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, location: 8}
  WT: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 9}
  DMSO: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 11}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - DMSO: {description: dilution solution}
  - Substrate: {description: Substrate}
  - GESSv4_WT: {description: WT_sensor}
  - GESSV4_E135K: {description: E135K_sensor}
ingredLocations:
  E135K:
    GESSV4_E135K {volume: 10000}: A1-A12
  substrate:
    Substrate {volume: 5}: A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  WT:
    GESSv4_WT {volume: 10000}: A1-A12
  DMSO:
    DMSO {volume: 10000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 198
  path: single
  changeTip: once
  aspirate_labware: WT
  aspirate_wells: A1-A12
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  dispense_labware: 96_WT
  dispense_wells: A1-A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 198
  path: single
  changeTip: once
  aspirate_labware: WT
  aspirate_wells: A1-A12
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  dispense_labware: 96_WT (1)
  dispense_wells: A1-A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 198
  path: single
  changeTip: once
  aspirate_labware: E135K
  aspirate_wells: A1-A12
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  dispense_labware: 96_E135K
  dispense_wells: A1-A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 198
  path: single
  changeTip: once
  aspirate_labware: E135K
  aspirate_wells: A1-A12
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  dispense_labware: 96_E135K (1)
  dispense_wells: A1-A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A3
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A3
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A3
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  dispense_labware: 96_WT
  dispense_wells: A2, A3
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A3
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  dispense_labware: 96_E135K
  dispense_wells: A2, A3
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A4
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A4
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A4
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  dispense_labware: 96_WT
  dispense_wells: A4, A5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A4
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  dispense_labware: 96_E135K
  dispense_wells: A4, A5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A5
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A5
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  dispense_labware: 96_WT
  dispense_wells: A6, A7
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A5
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  dispense_labware: 96_E135K
  dispense_wells: A6, A7
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A6
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A6
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A6
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  dispense_labware: 96_WT
  dispense_wells: A8, A9
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A6
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  dispense_labware: 96_E135K
  dispense_wells: A8, A9
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A7
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A7
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A7
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  dispense_labware: 96_WT
  dispense_wells: A10, A11
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A7
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  dispense_labware: 96_E135K
  dispense_wells: A10, A11
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A8
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A8
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A8
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  dispense_labware: 96_WT (1)
  dispense_wells: A2, A3
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A8
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  dispense_labware: 96_E135K (1)
  dispense_wells: A2, A3
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A9
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A9
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A9
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  dispense_labware: 96_WT (1)
  dispense_wells: A4, A5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A9
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  dispense_labware: 96_E135K (1)
  dispense_wells: A4, A5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A10
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A10
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A10
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  dispense_labware: 96_WT (1)
  dispense_wells: A6, A7
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A10
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  dispense_labware: 96_E135K (1)
  dispense_wells: A6, A7
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A11
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A11
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A11
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  dispense_labware: 96_WT (1)
  dispense_wells: A8, A9
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A11
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  dispense_labware: 96_E135K (1)
  dispense_wells: A8, A9
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: DMSO
  aspirate_wells: A1
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  dispense_labware: substrate
  dispense_wells: A12
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 5
  times: 3
  changeTip: never
  labware: substrate
  wells: A12
  aspirate_flowRate: 4
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  dispense_flowRate: 4
  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: never
  aspirate_labware: substrate
  aspirate_wells: A12
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  dispense_labware: 96_WT (1)
  dispense_wells: A10, A11
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: substrate
  aspirate_wells: A12
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  dispense_labware: 96_E135K (1)
  dispense_wells: A10, A11
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons 96 Tip Rack 300 µL (1), wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 198, labwareId: WT, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 198, labwareId: 96_WT, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 94}
- aspirate: {pipetteId: p300_multi_gen2, volume: 198, labwareId: WT, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 198, labwareId: 96_WT, wellName: A2, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 94}
- aspirate: {pipetteId: p300_multi_gen2, volume: 198, labwareId: WT, wellName: A3, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 94}
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